PsychoPy2experiment version="2022.2.1"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'start spatial freq': '6', 'step spatial freq': '8', 'end spatial freq': '46'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = iva
  keyboardBackend = ioHub
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Routines
  Routine grating_acuity
    GratingComponent GA
      mask = circle
      saveStartStop = False
      sf [set every repeat] = spatial_freq
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      tex = sqr
      texture resolution = 512
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    VariableComponent spatial_freq
      startExpValue = int(expInfo['start spatial freq'])
      startRoutineValue = spatial_freq+int(expInfo['step spatial freq'])
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Flow
  LoopInitiator GA_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = (int(expInfo['end spatial freq'])-int(expInfo['start spatial freq']))//int(expInfo['step spatial freq'])
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    Routine grating_acuity
  LoopTerminator GA_loop
